PsychoPy2experiment version="2023.2.2"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Save log file = False
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  color = 1.0000, 1.0000, 1.0000
  expName = experiment
  keyboardBackend = ioHub
  logging level = data
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Routines
  Routine Instructions
    RoutineSettingsComponent Instructions
      saveStartStop = False
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    TextComponent instr_text
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        1-back test

        Press space to start.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Thanks
    RoutineSettingsComponent Thanks
      saveStartStop = False
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    TextComponent thx_text
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Thats all, thanks
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  Routine routine_2_back
    RoutineSettingsComponent routine_2_back
      stopVal [duration (s)] = 3
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        import random
        import string

        all_letters2 = list(string.ascii_uppercase)
        random.shuffle(all_letters2)  # Shuffle the order of letters

        nback2 = ''
        stimulus2 = ''
        nloop_text2 = '0'
        presented2 = []
        doNBackCount2 = 0
      Begin Routine:
        n = 2
        keyPressed2 = event.getKeys()
        loop2 = trials_2.thisRepN + 1
        color = 'black'
        # Randomly decide if this will be a match trial (n-back match)
        if random.choice([True, False]):
            if doNBackCount2/loop2 <= 0.4:
            # Add the same letter again to make it a n-back match
                doNBackCount2 = doNBackCount2 + 1
                all_letters2.insert(-(n), all_letters2[-1])
        if loop2 > n:
            nback2 = presented2[-n]
        stimulus2 = all_letters2.pop()
        presented2.append(stimulus2)
        if nback2 == stimulus2:
            correctAns2 = ['space']
        else:
            correctAns2 = None
        nloop_text2 = str(loop)
        argh2 = str(all_letters)
      Each Frame:
        # Check for spacebar press
        if 'space' in key_resp_3.keys:
            # Change the color of the polygon
            color = 'blue'
            stimulus_text_2.color = color
    TextComponent stimulus_text_2
      color [set every frame] = $color
      letterHeight = 0.3
      saveStartStop = False
      startVal [time (s)] = 0.1
      text [set every repeat] = $stimulus2
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      correctAns = $correctAns2
      discard previous = False
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = all keys
      storeCorrect = True
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    VariableComponent letter_2
      saveStartStop = False
      startRoutineValue = $stimulus2
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    VariableComponent nback_2
      saveStartStop = False
      startRoutineValue = $nback2
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  Routine Pause
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    TextComponent break_text
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        2-back test

        Press space to start.
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine routine_1_back
    RoutineSettingsComponent routine_1_back
      stopVal [duration (s)] = 3
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    CodeComponent code_gpt
      Code Type = Auto->JS
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      Before Experiment:
        color = 'black'
      Begin Experiment:
        import random
        import string

        all_letters = list(string.ascii_uppercase)
        random.shuffle(all_letters)  # Shuffle the order of letters

        nback = ''
        stimulus = ''
        nloop_text = '0'
        presented = []
        doNBackCount = 0
      Begin Routine:
        n = 1
        keyPressed = event.getKeys()
        loop = trials.thisRepN + 1
        color = 'black'
        # Randomly decide if this will be a match trial (n-back match)
        if random.choice([True, False]):
            if doNBackCount/loop <= 0.4:
            # Add the same letter again to make it a n-back match
                doNBackCount = doNBackCount + 1
                all_letters.insert(-(n), all_letters[-1])
        if loop > n:
            nback = presented[-n]
        stimulus = all_letters.pop()
        presented.append(stimulus)
        if nback == stimulus:
            correctAns = ['space']
        else:
            correctAns = None
        nloop_text = str(loop)
        argh = str(all_letters)
      Each Frame:
        # Check for spacebar press
        if 'space' in key_resp_2.keys:
            # Change the color of the polygon
            color = 'blue'
            stimulus_text.color = color
    TextComponent stimulus_text
      color [set every frame] = $color
      letterHeight = 0.2
      saveStartStop = False
      startVal [time (s)] = 0.1
      text [set every repeat] = $stimulus
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      correctAns = $correctAns
      discard previous = False
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = all keys
      storeCorrect = True
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    VariableComponent letter
      saveStartStop = False
      startRoutineValue = $stimulus
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    VariableComponent nback
      saveStartStop = False
      startRoutineValue = $nback
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Flow
  Routine Instructions
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = 10
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    Routine routine_1_back
  LoopTerminator trials
  Routine Pause
  LoopInitiator trials_2 loopType="TrialHandler"
    loopType = sequential
    nReps = 10
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    Routine routine_2_back
  LoopTerminator trials_2
  Routine Thanks
