PsychoPy2experiment version="2023.2.2"
Settings
  Audio lib = ptb
  Data filename = u'data/%s_%s_%s' % (expInfo['participant'], expInfo['session'], expInfo['date'])
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save log file = False
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  color = 1.0000, 1.0000, 1.0000
  expName = experiment
  keyboardBackend = ioHub
  logging level = error
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Routines
  Routine Instructions
    RoutineSettingsComponent Instructions
      saveStartStop = False
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    TextComponent instr_text
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every frame] = $n_text
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Experiment:
        n_text = ''
      Begin Routine:
        n = test_order.pop()
        n_text = str(n)+'-back test\n\nPress space to start.'
        nback = ''
        doNBackCount = 0
  Routine Thanks
    RoutineSettingsComponent Thanks
      saveStartStop = False
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    TextComponent thx_text
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Thats all, thanks
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  Routine routine_1_back
    RoutineSettingsComponent routine_1_back
      saveStartStop = False
      stopVal [duration (s)] = 2.1
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    CodeComponent code_gpt
      Code Type = Auto->JS
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      Begin Experiment:
        import random
        import string

        all_letters = []
        i=0
        while i<8:
            for n in string.ascii_uppercase:
                all_letters.append(n)
            i+=1
        random.shuffle(all_letters)

        nback = ''
        stimulus = ''
        nloop_text = '0'
        presented = []
      Begin Routine:
        loop = trials.thisRepN + 1
        # Randomly decide if this will be a match trial (n-back match)
        if random.choice([True, False]):
            if doNBackCount/loop <= 0.4:
            # Add the same letter again to make it a n-back match
                doNBackCount = doNBackCount + 1
                all_letters.insert(-(n), all_letters[-1])
        if loop > n:
            nback = presented[-n]
        stimulus = all_letters.pop()
        presented.append(stimulus)
        if nback == stimulus:
            correctAns = ['space']
        else:
            correctAns = None
        nloop_text = str(loop)
    TextComponent stimulus_text
      color [set every frame] = black
      letterHeight = 0.2
      saveStartStop = False
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $stimulus
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      correctAns = $correctAns
      discard previous = False
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = all keys
      storeCorrect = True
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    VariableComponent letter
      saveStartStop = False
      startRoutineValue = $stimulus
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    VariableComponent nback
      saveStartStop = False
      startRoutineValue = $nback
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    TextComponent cross1
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.7
      stopVal [duration (s)] = 1.5
      text = +
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    VariableComponent type
      saveStartStop = False
      startRoutineValue = $n
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  Routine code_setup
    RoutineSettingsComponent code_setup
      saveStartStop = False
      stopVal [duration (s)] = 0.001
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        from random import shuffle

        # Define the order of tests (1-back and 2-back) and randomize it
        test_order = [1,1,1,1,2,2,2,2]
        shuffle(test_order)
        doNBackCount = 0
Flow
  Routine code_setup
  LoopInitiator trials_3 loopType="TrialHandler"
    loopType = sequential
    nReps = 8
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    Routine Instructions
    LoopInitiator trials loopType="TrialHandler"
      loopType = sequential
      nReps = 12
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      Routine routine_1_back
    LoopTerminator trials
  LoopTerminator trials_3
  Routine Thanks
